PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = demo_builder
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Routines
  Routine trials
    EyetrackerEventComponent eyetacker_event
      message = event_marker
      syncScreenRefresh = True
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Any text

        including line breaks
  Routine get_ready
    EyetrackerInitComponent eyetracker_init
      id = 0
      infant = True
      syncScreenRefresh = False
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    EyetrackerCalibComponent eyetracker_calib
      audio = None
      calibration_points = [(-0.4, 0.4), (-0.4, -0.4), (0.0, 0.0), (0.4, 0.4), (0.4, -0.4)]
      decision_key = space
      focus_time = 0.5
      infant_stims = ['infant/cow.png', 'infant/elk.png', 'infant/hippo.png', 'infant/ladybug.png', 'infant/panda.png']
      show_status = True
      syncScreenRefresh = False
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    EyetrackerValidComponent eyetracker_valid
      decision_key = space
      focus_time = 0.5
      sample_count = 30
      save_to_file = True
      show_results = False
      syncScreenRefresh = False
      timeout = 1
      validation_points = None
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    EyetrackerRecComponent eyetacker_rec
      filename = gaze_TOBII_output.tsv
      newfile = True
      syncScreenRefresh = False
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Flow
  Routine get_ready
  Routine trials
