PsychoPy2experiment version="2021.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = demo_components
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Routines
  Routine trial
    PTIEventComponent pti_event
      message = u'trial_onset'
      syncScreenRefresh = True
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Some texts…
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    PTIEventComponent pti_event_2
      message = u'trial_offset'
      syncScreenRefresh = True
  Routine get_ready
    PTIInitiationComponent pti_init
      id = 0
      infant = True
    PTICalibrationComponent pti_calib
      audio = None
      calibration_points = [(-0.4, 0.4), (-0.4, -0.4), (0.0, 0.0), (0.4, 0.4), (0.4, -0.4)]
      decision_key = space
      focus_time = 0.5
      infant_stims = ['infant/cow.png', 'infant/elk.png', 'infant/hippo.png', 'infant/ladybug.png', 'infant/panda.png']
      show_status = True
    PTIValidationComponent pti_valid
      decision_key = space
      focus_time = 0.5
      sample_count = 30
      save_to_file = True
      show_results = False
      timeout = 1
      validation_points = None
    PTIStartRecordingComponent pti_start_recording
      newfile = True
      tobii_filename = u'data/%s_%s_%s_TOBII.tsv'% (expInfo['participant'], expName, expInfo['date'])
  Routine bye
    PTIStopRecordingComponent pti_stop_recording
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you!
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Flow
  Routine get_ready
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine trial
  LoopTerminator trials
  Routine bye
